'CR6 Datalogger Program
'ICOS Cities
'Date: April 26, 2022
'Updated April 11, 2024 - V39 by RH 
'See https://github.com/envmet/ICOS-Cities/tree/main/Logger-Program for versioning
'Program authors: 
' Andreas Christen andreas.christen(at)meteo.uni-freiburg.de
' Joshua Hashemi joshua.hashemi(at)meteo.uni-freiburg.de
' Stavros Stagakis stavros.stagakis(at)unibas.ch
' Benjamin Loubet Benjamin.Loubet@inrae.fr
' Hilland: rainer.hilland@meteo.uni-freiburg.de
'Wiring
'ClimaVue50 (optional)
'U11 - (white) ClimaVue50 Signal 
'|||- = (clear) ClimaVue50 Shield  
'G = (black) ClimaVue50 Power Ground  
'12V = (brown) ClimaVue50 Power 12V 

'=====================================================================
'Declare Constants
'=====================================================================

'Define internet communication settings
'Const SYS_NTP_Server_IP = "192.168.1.1" 'NTP from router
Const SYS_FTP_ServerIP = "132.230.103.24"  'FTP at Univeristy of Freiburg for data transmission
Const SYS_FTP_User = "datagate7"           
Const SYS_FTP_Password = "handsaw-talon-movable-haziness-unleash-buckle"
'Const SYS_Offset_from_UTC = 0

'Define SDM and SDI-12 communication settings
Const SYS_EC100_SDMAddress = 1 ' SDM Address of IRGASON EC100
Const SYS_CD8S_SDMAddress = 2  ' SDM Address of CD8S Relay Controller
Const SYS_SDM_BitPeriod = 28.8 ' Possibly to be changed based on cable length
Const SYS_CV50_SDI12Port = U11 ' Port on which a ClimaVue50 is optionally connected over SDI-12

'Define instrument and output settings 
Const SYS_OutputRate = 20 'Hz of fast data tables
Const SYS_MovingBlockDuration = 900 ' Number of seconds to average running mean and standard deviation of vertical wind #version 33 : set to 900
Const SYS_EC100_Bandwidth = 20 'Hz bandwith, should be 1/2 output rate
Const SYS_REA_Sampler_Voltage_Threshold = 1500 ' If voltage drops below this value for a given duration (defined by SYS_REA_MovingBlockVolt) then the run will stop 
                                               ' (too indicate buffers are full). If this valie increases from 0 above the threshold a new run will be started.
Const SYS_REA_MovingBlockVolt = 1 ' Number of seconds to average voltage signal from REA sampler for triggering or stopping run.
Const SYS_REA_OpenValvesAtEnd = 25 ' Number of seconds to open both valves after stopping run.#version 33 : changed to 25
Const SYS_IRGASON_Azimuth = 270.0 ' Provide here Azimuth of IRGASON's y-axis relative to North (i.e. if head points to N = 0, E = 90, S = 180, W = 270
Const SYS_CV50_Azimuth = 90.0 'The Climavue N is facing E
Const SYS_ClimaVue50_Enable As Boolean = TRUE 'Set to TRUE if a ClimaVue50 is attached (conditional compile)

'Define physical universal constants
Const SYS_UnivGasConstant = 8.3144598  'J mol-1 K-1 
Const SYS_UnivGasConstant2 = 0.0000820575  'm3 atm K-1 mol-1
Const SYS_MolarMassAir = 28.96 'g mol-1 for dry air
Const SYS_MolarMassWater = 18.015 'g mol-1 
Const SYS_MolarMassCO2 = 44.009 'g mol-1 
Const SYS_GasConstantWater = 1000*SYS_UnivGasConstant/SYS_MolarMassWater 'J kg-1 K-1
Const SYS_GasConstantAir = 1000*SYS_UnivGasConstant/SYS_MolarMassAir 'J kg-1 K-1

' Provide output of trigonometric functions in degrees
AngleDegrees 

'=====================================================================
'Declare Variables
'=====================================================================

'Declare Public Variables

'directly polled, instantaneous IRGASON variables
Public RAW_IRGASON(13)
Alias RAW_IRGASON(1) = RAW_IRGASON_Ux : Units RAW_IRGASON_Ux = m/s
Alias RAW_IRGASON(2) = RAW_IRGASON_Uy : Units RAW_IRGASON_Uy = m/s
Alias RAW_IRGASON(3) = RAW_IRGASON_Uz : Units RAW_IRGASON_Uz = m/s
Alias RAW_IRGASON(4) = RAW_IRGASON_Ts : Units RAW_IRGASON_Ts = degC
Alias RAW_IRGASON(5) = RAW_IRGASON_DiagSonic : Units RAW_IRGASON_DiagSonic = arb 
Alias RAW_IRGASON(6) = RAW_IRGASON_CO2 : Units RAW_IRGASON_CO2 = mg/m^3 
Alias RAW_IRGASON(7) = RAW_IRGASON_H2O : Units RAW_IRGASON_H2O = g/m^3 
Alias RAW_IRGASON(8) = RAW_IRGASON_DiagIRGA : Units RAW_IRGASON_DiagIRGA = arb 
Alias RAW_IRGASON(9) = RAW_IRGASON_CellT : Units RAW_IRGASON_CellT = degC
Alias RAW_IRGASON(10) = RAW_IRGASON_CellPrs : Units RAW_IRGASON_CellPrs = kPa 
Alias RAW_IRGASON(11) = RAW_IRGASON_CO2SigStrgth : Units RAW_IRGASON_CO2SigStrgth = arb
Alias RAW_IRGASON(12) = RAW_IRGASON_H2OSigStrgth : Units RAW_IRGASON_H2OSigStrgth = arb
Alias RAW_IRGASON(13) = RAW_IRGASON_CO2_FastResp : Units RAW_IRGASON_CO2_FastResp = mg/m^3
'Derived instantaneous CO2 dry mole fraction 
Public RAW_IRGASON_CO2Dry : Units RAW_IRGASON_CO2Dry = ppm

' Derived instantaneous IRGASON variables (not stored high frequency)
Public RAW_IRGASON_Uz_SqDeparture : Units RAW_IRGASON_Uz_SqDeparture = m2/s2
Public RAW_IRGASON_CO2Dry_SqDeparture : Units RAW_IRGASON_CO2Dry_SqDeparture = ppm^2
Public RAW_IRGASON_HorWindVel_ms : Units RAW_IRGASON_HorWindVel_ms = m/s
Public RAW_IRGASON_HorWindDir_degN : Units RAW_IRGASON_HorWindDir_degN = degN
Public RAW_IRGASON_WindInclination_deg : Units RAW_IRGASON_WindInclination_deg = degN

' Aggregated IRGASON variables
Public AGG_IRGASON_Uz_RunAvg : Units AGG_IRGASON_Uz_RunAvg = m2/s2
Public AGG_IRGASON_Uz_RunSqDeparture : Units AGG_IRGASON_Uz_RunSqDeparture = m2/s2
Public AGG_IRGASON_Uz_Stddev : Units AGG_IRGASON_Uz_Stddev = m/s
Public AGG_IRGASON_CO2Dry_RunAvg : Units AGG_IRGASON_CO2Dry_RunAvg = ppm
Public AGG_IRGASON_CO2Dry_RunSqDeparture : Units AGG_IRGASON_CO2Dry_RunSqDeparture = ppm
Public AGG_IRGASON_CO2Dry_Stddev : Units AGG_IRGASON_CO2Dry_Stddev = ppm  
         
' System operation variables
Public SYS_BattVolt : Units SYS_BattVolt = V
Public SYS_PanelTemp : Units SYS_PanelTemp = degC
Public SYS_FTPresult(3) As Long
Public SYS_DateStamp As String * 10
Public SYS_TimeStamp As String * 5
Public SYS_CD16_Output(16) ' all should be set to zero
Dim SYS_EC100_Result
'Dim SYS_TimeOffset
Dim SYS_StoreRun
Dim SYS_UploadRun ' To upload the file of a Run Summary to FTP
Dim AGG_IRGASON_Frozen_Uz_RunAvg  'Intermediate storage
Dim AGG_IRGASON_Frozen_Uz_Stddev  'Intermediate storage 
Dim AGG_IRGASON_Frozen_CO2Dry_RunAvg  'Intermediate storage
Dim AGG_IRGASON_Frozen_CO2Dry_Stddev  'Intermediate storage
Public SYS_LastFileNameRaw20Hz As String * 40 'INRAE file zip control
Public SYS_LastFileNameRaw20Hz_tmp As String * 40 'INRAE file zip control
Public SYS_LastFileNameAG1mn As String * 40 'INRAE file zip control
Public SYS_ResultGzip(2) As Long 'INRAE zip file control
Public SYS_20HzFileReadytoSend  'INRAE FTP file control
Public SYS_20HzFileWritten'INRAE FTP file control

' Relaxed eddy accumulation variables
'Define editable relaxed eddy accumulation settings (to be set by user)
Public REA_DeadBandWidth = 0.5
Public REA_Hyperbolic = 0.0 '0 = deadband REA based on vertical wind, 1 = hyperbolic REA based on CO2 concentration fluctuation. 
Public REA_HyperbolicDistance = -9999.0
Public REA_FreezeStatistics = 0.0 '1 = REA uses a frozen mean vertical wind (and for hyperbolic also frozen mean CO2 conentration) determined at beginning of run, 0 = REA uses a dynamically determined mean vertical wind and dynamically determined CO2 concentration #version 33 introduced : set to 0, version 38 added for hyperbolic
Public REA_Manual_OpenValves = 0.0 '0 = REA controled by vertical wind, 1 = REA manually controlled for testing
Public REA_Valve_Maintenance = 1 '1 = Maintenace mode, i.e. valves are automatically opened for maintenance, 0 = regular mode
Public REA_Run_EndCounter ' Counter for opening valves at end of any run
'Public DIAG_p1_high = 0
'Public DIAG_p2_high = 0
'Public DIAG_p3_high = 0

'Define programmatic relaxed eddy accumulation variables (should not be edited by user) 
Public REA_Sampler_Active '0 = ICOS sampler inactive, 1 = ICOS sampler active
Public REA_Sampler_PreviousActive '0 = ICOS sampler in previous step inactive, 1 = ICOS sampler in prev. step active
Public REA_Sampler_Active_Voltage : Units REA_Sampler_Active_Voltage = mV
Public REA_Sampler_Active_Voltage_RunAvg : Units REA_Sampler_Active_Voltage_RunAvg = mV
Public REA_PreviousReservoir 'Current reservoir 0 = No reservoir (deadband), 1 = up reservoir, 2 = downwind reservoir, 3 = both reservoir (manual mode only)
Public REA_CurrentReservoir 'Reservoir in previous step, 0 = No reservoir (deadband), 1 = up reservoir, 2 = downwind reservoir
Public REA_Flag ' AB = Switched from A -> B, 00, 01, 02, 10, 11, 12, 20, 21, 22
Public REA_Run_Start As String * 22
Public REA_Run_Stop As String * 22
Public REA_Run_TimeUp : Units REA_Run_TimeUp = sec
Public REA_Run_TimeDown : Units REA_Run_TimeDown = sec
Public REA_Run_TimeAll : Units REA_Run_TimeAll = sec
Public REA_Run_SwitchesUp : Units REA_Run_SwitchesUp = count
Public REA_Run_SwitchesDown : Units REA_Run_SwitchesDown = count
Public REA_Run_CO2AvgUp : Units REA_Run_CO2AvgUp = mg/m^3
Public REA_Run_CO2AvgDown : Units REA_Run_CO2AvgDown = mg/m^3
Public REA_Run_CO2AvgAll : Units REA_Run_CO2AvgAll = mg/m^3
Public REA_Run_CO2DryAvgUp : Units REA_Run_CO2DryAvgUp = ppm
Public REA_Run_CO2DryAvgDown : Units REA_Run_CO2DryAvgDown = ppm
Public REA_Run_CO2DryAvgAll : Units REA_Run_CO2DryAvgAll = ppm
Public REA_Run_H2OAvgUp : Units REA_Run_H2OAvgUp = g/m^3
Public REA_Run_H2OAvgDown : Units REA_Run_H2OAvgDown = g/m^3
Public REA_Run_H2OAvgAll : Units REA_Run_H2OAvgAll = g/m^3
Public REA_Run_PressureAvgUp : Units REA_Run_PressureAvgUp = kPa
Public REA_Run_PressureAvgDown : Units REA_Run_PressureAvgDown = kPa
Public REA_Run_PressureAvgAll : Units REA_Run_PressureAvgAll = kPa
Public REA_Run_TempAvgUp : Units REA_Run_TempAvgUp = degC
Public REA_Run_TempAvgDown : Units REA_Run_TempAvgDown = degC
Public REA_Run_TempAvgAll : Units REA_Run_TempAvgAll = degC
Public REA_Run_HorWindVelAvgUp : Units REA_Run_HorWindVelAvgUp = m/s
Public REA_Run_HorWindVelAvgDown : Units REA_Run_HorWindVelAvgDown = m/s
Public REA_Run_HorWindVelAvgAll : Units REA_Run_HorWindVelAvgAll = m/s
Public REA_Run_UxWindAvgUp : Units REA_Run_UxWindAvgUp = m/s
Public REA_Run_UxWindAvgDown : Units REA_Run_UxWindAvgDown = m/s
Public REA_Run_UxWindAvgAll : Units REA_Run_UxWindAvgAll = m/s
Public REA_Run_UyWindAvgUp : Units REA_Run_UyWindAvgUp = m/s
Public REA_Run_UyWindAvgDown : Units REA_Run_UyWindAvgDown = m/s
Public REA_Run_UyWindAvgAll : Units REA_Run_UyWindAvgAll = m/s
Public REA_Run_HorWindDirAvgUp : Units REA_Run_HorWindDirAvgUp = deg
Public REA_Run_HorWindDirAvgDown : Units REA_Run_HorWindDirAvgDown = deg
Public REA_Run_HorWindDirAvgAll : Units REA_Run_HorWindDirAvgAll = deg

'Meteorology variables through ClimaVue50
#If (SYS_ClimaVue50_Enable) Then ' ClimaVue50 raw data
  Public RAW_CV50_Data(14)
  Alias RAW_CV50_Data(1)=RAW_CV50_GHI_Wm2 : Units RAW_CV50_GHI_Wm2 = W/m2
  Alias RAW_CV50_Data(2)=RAW_CV50_Precipitation_mm : Units RAW_CV50_Precipitation_mm = mm
  Alias RAW_CV50_Data(3)=RAW_CV50_LtngStrikes_cnt : Units RAW_CV50_LtngStrikes_cnt = Count
  Alias RAW_CV50_Data(4)=RAW_CV50_LtngDist_km : Units RAW_CV50_LtngDist_km = km
  Alias RAW_CV50_Data(5)=RAW_CV50_Wind_ms : Units RAW_CV50_Wind_ms = m/s
  Alias RAW_CV50_Data(6)=RAW_CV50_WindDirection_deg : Units RAW_CV50_WindDirection_deg = deg
  Alias RAW_CV50_Data(7)=RAW_CV50_WindGustMax_ms : Units RAW_CV50_WindGustMax_ms = m/s
  Alias RAW_CV50_Data(8)=RAW_CV50_AirTemperature_degC : Units RAW_CV50_AirTemperature_degC = degC
  Alias RAW_CV50_Data(9)=RAW_CV50_VapourPressure_kPa : Units RAW_CV50_VapourPressure_kPa = kPa
  Alias RAW_CV50_Data(10)=RAW_CV50_PressureActual_kPa : Units RAW_CV50_PressureActual_kPa = kPa
  Alias RAW_CV50_Data(11)=RAW_CV50_RelHumidity_fractional : Units RAW_CV50_RelHumidity_fractional = fraction
  Alias RAW_CV50_Data(12)=RAW_CV50_RHT_C : Units RAW_CV50_RHT_C = degC
  Alias RAW_CV50_Data(13)=SYS_CV50_TiltNS_deg : Units SYS_CV50_TiltNS_deg = deg
  Alias RAW_CV50_Data(14)=SYS_CV50_TiltWE_deg : Units SYS_CV50_TiltWE_deg = deg
  Public RAW_CV50_Invalid_Wind As Long : Units RAW_CV50_Invalid_Wind = Count
#EndIf

#If (SYS_ClimaVue50_Enable) Then ' ClimaVue50 QC and converted data
  Public MET_CV50_GHI_Wm2 As Float : Units MET_CV50_GHI_Wm2 = W/m2
  Public MET_CV50_Precipitation_mm As Float : Units MET_CV50_Precipitation_mm = mm
  Public MET_CV50_LtngStrikes_cnt As Float : Units MET_CV50_LtngStrikes_cnt = Count
  Public MET_CV50_LtngDist_km As Float : Units MET_CV50_LtngDist_km = km
  Public MET_CV50_Wind_ms As Float : Units MET_CV50_Wind_ms = m/s
  Public MET_CV50_WindDirection_deg As Float : Units MET_CV50_WindDirection_deg = deg 
  Public MET_CV50_WindGustMax_ms As Float : Units MET_CV50_WindGustMax_ms = m/s
  Public MET_CV50_AirTemperature_degC As Float : Units MET_CV50_AirTemperature_degC = degC
  Public MET_CV50_VapourPressure_hPa As Float : Units MET_CV50_VapourPressure_hPa = hPa
  Public MET_CV50_PressureActual_hPa As Float : Units MET_CV50_PressureActual_hPa = hPa
  Public MET_CV50_RelHumidity_percent As Float : Units MET_CV50_RelHumidity_percent = %
  ' Copy wind data from previous measurement for gap filling
  Public MET_CV50_Wind_ms_prev As Float
  Units MET_CV50_Wind_ms_prev = m/s
  Public MET_CV50_WindDirection_deg_prev As Float
  Units MET_CV50_WindDirection_deg_prev = deg
  Public MET_CV50_WindGustMax_ms_prev As Float
  Units MET_CV50_WindGustMax_ms_prev = m/s
  'secondary calculations from ClimaVue50 data:
  Public MET_CV50_DewPoint_degC  As Float
  Units MET_CV50_DewPoint_degC=degC
  Public MET_CV50_VapPressDeficit_hPa As Float
  Units MET_CV50_VapPressDeficit_hPa=hPa
  Public MET_CV50_MixingRatio_gKg As Float
  Units MET_CV50_MixingRatio_gKg=g/kg
#EndIf

#If (SYS_ClimaVue50_Enable) Then 'ClimaVue50 helper variables
  Public MET_SaturVapPrsTd_hPa As Float : Units MET_SaturVapPrsTd_hPa=hPa
  Public MET_SaturVapPrsTd_kPa As Float : Units MET_SaturVapPrsTd_kPa=kPa
#EndIf

'=====================================================================
'Declare Output Data Tables
'=====================================================================

'Define High Frequency Data Tables
DataTable (RAW_20Hz,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,1000/SYS_OutputRate,mSec,20)
	Sample(13,RAW_IRGASON,IEEE4) ' Export all data
	Sample (1, RAW_IRGASON_CO2Dry, IEEE4)
	Sample(1,REA_Flag,FP2)
	TableFile ("CRD:"+Status.SerialNumber+"_RAW_20Hz_",8,-1,0,30,Min,SYS_20HzFileWritten,SYS_LastFileNameRaw20Hz)
EndTable

'Define Aggregated Data Table over 1 min
DataTable (AGG_1min,1,-1) 'Set table size to # of records, or -1 to autoallocate.
	DataInterval (0,1,min,0)
  Average(13,RAW_IRGASON,IEEE4,0) ' Write 1 min average of all IRGASON variables
  Average(1,RAW_IRGASON_CO2Dry,IEEE4,0)
  Average(1,RAW_IRGASON_HorWindVel_ms,IEEE4,0) ' Scalar average horizontal wind
  WindVector (1,RAW_IRGASON_HorWindVel_ms,RAW_IRGASON_HorWindDir_degN,IEEE4,0,0,0,1) ' Vector average horizontal wind and wind direction
  FieldNames("RAW_IRGASON_HorWindVelVec_ms,RAW_IRGASON_HorWindDir_degN")
  #If (SYS_ClimaVue50_Enable) Then ' Output the following fields if a ClimaVue is attached
  	Average (1,MET_CV50_PressureActual_hPa,IEEE4,False)
  	Average (1,MET_CV50_Wind_ms,IEEE4,False)
  	Maximum (1,MET_CV50_WindGustMax_ms,IEEE4,False,False)
    WindVector (1,MET_CV50_Wind_ms,MET_CV50_WindDirection_deg,IEEE4,0,0,0,1)
    FieldNames("MET_CV50_Wind_ms_Vec,MET_CV50_WindDirection_deg_Vec")
  	Average (1,MET_CV50_AirTemperature_degC,IEEE4,False)
  	Average (1,MET_CV50_RelHumidity_percent,IEEE4,False)
    Average (1,MET_CV50_DewPoint_degC,IEEE4,False)
    Average (1,MET_CV50_VapourPressure_hPa,IEEE4,False)
    Average (1,MET_CV50_VapPressDeficit_hPa,IEEE4,False)
    Average (1,MET_CV50_MixingRatio_gKg,IEEE4,False)
    Average (1,MET_CV50_GHI_Wm2,IEEE4,False)
    Totalize (1,MET_CV50_Precipitation_mm,IEEE4,False)
    Totalize (1,MET_CV50_LtngStrikes_cnt,IEEE4,False)
    Average (1,MET_CV50_LtngDist_km,IEEE4,False)
    Average (1,SYS_CV50_TiltNS_deg,IEEE4,False)
    Average (1,SYS_CV50_TiltWE_deg,IEEE4,False)
  #EndIf 
  Average(1,SYS_BattVolt,FP2,0)
  Average(1,SYS_PanelTemp,FP2,0)

	TableFile ("CRD:"+Status.SerialNumber+"_AGG_1min_",8,-1,0,30,Min,0,SYS_LastFileNameAG1mn) 'changed from 24 hrs to 30 min
EndTable

'Define Aggregated REA Run Statistics Table
DataTable (REA_RunSummary,SYS_StoreRun,-1) 'Set table size to # of records, or -1 to autoallocate.
  Sample(1,REA_Run_Start,String) 
  Sample(1,REA_Run_Stop,String) 
  Sample(1,REA_Run_TimeUp,IEEE4) 
  Sample(1,REA_Run_TimeDown,IEEE4) 
  Sample(1,REA_Run_TimeAll,IEEE4) 
  Sample(1,REA_Run_SwitchesUp,IEEE4)
  Sample(1,REA_Run_SwitchesDown,IEEE4)
  Sample(1,REA_Run_CO2AvgUp,IEEE4) ' Conditional average only up reservoir
  Sample(1,REA_Run_CO2AvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_CO2AvgAll,IEEE4) ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_CO2DryAvgUp,IEEE4) ' Conditional average only up reservoir
  Sample(1,REA_Run_CO2DryAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_CO2DryAvgAll,IEEE4) ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_H2OAvgUp,IEEE4) ' Conditional average only up reservoir
  Sample(1,REA_Run_H2OAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_H2OAvgAll,IEEE4) ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_PressureAvgUp,IEEE4) ' Conditional average only up reservoir
  Sample(1,REA_Run_PressureAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_PressureAvgAll,IEEE4)  ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_TempAvgUp,IEEE4) ' Conditional average only up reservoir
  Sample(1,REA_Run_TempAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_TempAvgAll,IEEE4)  ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_HorWindVelAvgUp,IEEE4)  ' Conditional average only up reservoir
  Sample(1,REA_Run_HorWindVelAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_HorWindVelAvgAll,IEEE4)  ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_Run_HorWindDirAvgUp,IEEE4)  ' Conditional average only up reservoir
  Sample(1,REA_Run_HorWindDirAvgDown,IEEE4) ' Conditional average only down reservoir
  Sample(1,REA_Run_HorWindDirAvgAll,IEEE4)  ' All = up + down + deadband, i.e. including deadband
  Sample(1,REA_DeadBandWidth,IEEE4)
  Sample(1,REA_FreezeStatistics,IEEE4)
  Sample(1,REA_Hyperbolic,IEEE4)
  Sample(1,AGG_IRGASON_Uz_RunAvg,IEEE4)
  Sample(1,AGG_IRGASON_Uz_Stddev,IEEE4)
  Sample(1,AGG_IRGASON_CO2Dry_RunAvg,IEEE4)
  Sample(1,AGG_IRGASON_CO2Dry_Stddev,IEEE4)
  
	TableFile ("CRD:"+Status.SerialNumber+"_REA_RunSummary_",8,-1,0,0,Min,0,0)
EndTable

'=====================================================================
'Main Program (Scans)
'=====================================================================

BeginProg
  
  ' Initialize the system the first time program is started
  SDMSpeed(SYS_SDM_BitPeriod)
  'NetworkTimeProtocol(SYS_NTP_Server_IP,SYS_Offset_from_UTC,50) ' Set Time when starting program
  EC100Configure(SYS_EC100_Result, SYS_EC100_SDMAddress, 0, SYS_EC100_Bandwidth) ' Set Bandwith when starting program
  
  'Initialize variables
  REA_Sampler_Active = 0
  REA_Sampler_PreviousActive = 0
  REA_PreviousReservoir = 0 
  REA_Valve_Maintenance = 0 
  REA_Run_EndCounter = 0
  REA_Run_TimeUp = 0
  REA_Run_TimeDown = 0
  REA_Run_SwitchesUp = 0
  REA_Run_SwitchesDown = 0
  REA_Run_CO2AvgUp = NaN
  REA_Run_CO2AvgDown = NaN
  REA_Run_CO2AvgAll = NaN
  REA_Run_CO2DryAvgUp = NaN
  REA_Run_CO2DryAvgDown = NaN
  REA_Run_CO2DryAvgAll = NaN
  REA_Run_H2OAvgUp = NaN
  REA_Run_H2OAvgDown = NaN
  REA_Run_H2OAvgAll = NaN
  REA_Run_PressureAvgUp = NaN
  REA_Run_PressureAvgDown = NaN
  REA_Run_PressureAvgAll = NaN
  REA_Run_TempAvgUp = NaN
  REA_Run_TempAvgDown = NaN
  REA_Run_TempAvgAll = NaN
  REA_Run_HorWindVelAvgUp = NaN
  REA_Run_HorWindVelAvgDown = NaN
  REA_Run_HorWindVelAvgAll = NaN
  REA_Run_UxWindAvgUp = NaN
  REA_Run_UxWindAvgDown = NaN
  REA_Run_UxWindAvgAll = NaN
  REA_Run_UyWindAvgUp = NaN
  REA_Run_UyWindAvgDown = NaN
  REA_Run_UyWindAvgAll = NaN
  REA_Run_HorWindDirAvgUp = NaN
  REA_Run_HorWindDirAvgDown = NaN
  REA_Run_HorWindDirAvgAll = NaN
  REA_Run_Start = ""
  REA_Run_Stop = ""
  
  SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress) ' Set SDMCD16AC to low 
  PortSet(U1,0) ' Communicate with REA sampler that up reservoir is off
  PortSet(U2,0) ' Communicate with REA sampler that down reservoir is off
  PortSet(U3,0) ' Communicate with REA sampler that no run is planned at start of program
  
  ' Actual Scan
  
	Scan (1000/SYS_OutputRate,mSec,0,0)
	  
		EC100(RAW_IRGASON,SYS_EC100_SDMAddress,2) 
		
    'Calculate horizontal wind direction
    RAW_IRGASON_HorWindDir_degN = (360.0 + 90.0 + ATN2((-1)*RAW_IRGASON_Ux,(-1)*RAW_IRGASON_Uy) + SYS_IRGASON_Azimuth) MOD 360
    RAW_IRGASON_HorWindVel_ms = (RAW_IRGASON_Ux^2 + RAW_IRGASON_Uy^2)^0.5 
    RAW_IRGASON_WindInclination_deg = ATN2(RAW_IRGASON_HorWindVel_ms,RAW_IRGASON_Uz) 'Calculate vertical wind inclination
    
    'Calculate CO2 dry mole fraction 
    RAW_IRGASON_CO2Dry = (((RAW_IRGASON_CO2_FastResp/1000/SYS_MolarMassCO2)/((RAW_IRGASON_CellPrs*0.00986923)/(SYS_UnivGasConstant2*(RAW_IRGASON_CellT+273.15))))/(1-((RAW_IRGASON_H2O/SYS_MolarMassWater)/((RAW_IRGASON_CellPrs*0.00986923)/(SYS_UnivGasConstant2*(RAW_IRGASON_CellT+273.15))))))*1000000
   
    ' -----------------------------------------------------------
		' Relaxed Eddy Accumulation code
		' -----------------------------------------------------------

		VoltDiff(REA_Sampler_Active_Voltage,1,mV5000,U7,0,0,15000,1,0) ' read sampler status from Port 1
		TotalRun (REA_Sampler_Active_Voltage_RunAvg,1,REA_Sampler_Active_Voltage,SYS_REA_MovingBlockVolt*SYS_OutputRate)
		REA_Sampler_Active_Voltage_RunAvg = REA_Sampler_Active_Voltage_RunAvg / (SYS_REA_MovingBlockVolt*SYS_OutputRate)
		
    'Event control (based on sampler voltage)
		If REA_Sampler_Active_Voltage_RunAvg > SYS_REA_Sampler_Voltage_Threshold Then 
		 REA_Sampler_Active = 1
		Else 
		 REA_Sampler_Active = 0
		EndIf 
		If (REA_Manual_OpenValves = 1) Then REA_Sampler_Active = 1
		
    'If (DIAG_p1_high = 1) Then 
    '  PortSet(U1, 1)
    'Else
    '  PortSet(U1, 0)
    'EndIf
    
    'If (DIAG_p2_high = 1) Then 
    '  PortSet(U2, 1)
    'Else
    '  PortSet(U2, 0)
    'EndIf
    
    'If (DIAG_p3_high = 1) Then 
    '  PortSet(U3, 1)
    'Else 
    '  PortSet(U3, 0)
    'EndIf
			
    ' If Relaxed Eddy Accumulation is inactive
		If (REA_Sampler_Active = 0) Then
		  
      If REA_Sampler_PreviousActive = 1 Then 
        
        PortSet(U3,0) ' Communicate with sampler that run has stopped
        REA_Run_Stop = Public.Timestamp(5,1) ' Record time of stoppingREA_Run_CO2AvgUp = SYS_OutputRate * REA_Run_CO2AvgUp / REA_Run_TimeUp
       
        ' Conditional averages based on up or down
        REA_Run_CO2AvgUp = REA_Run_CO2AvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_CO2AvgUp = 0 Then REA_Run_CO2AvgUp = NaN
        REA_Run_CO2AvgDown = REA_Run_CO2AvgDown / (REA_Run_TimeDown * SYS_OutputRate) 
        If REA_Run_CO2AvgDown = 0 Then REA_Run_CO2AvgDown = NaN
        REA_Run_CO2DryAvgUp = REA_Run_CO2DryAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_CO2DryAvgUp = 0 Then REA_Run_CO2DryAvgUp = NaN
        REA_Run_CO2DryAvgDown = REA_Run_CO2DryAvgDown / (REA_Run_TimeDown * SYS_OutputRate) 
        If REA_Run_CO2DryAvgDown = 0 Then REA_Run_CO2DryAvgDown = NaN        
        REA_Run_H2OAvgUp = REA_Run_H2OAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_H2OAvgUp = 0 Then REA_Run_H2OAvgUp = NaN
        REA_Run_H2OAvgDown = REA_Run_H2OAvgDown / (REA_Run_TimeDown * SYS_OutputRate)   
        If REA_Run_H2OAvgDown = 0 Then REA_Run_H2OAvgDown = NaN 
        REA_Run_PressureAvgUp = REA_Run_PressureAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_PressureAvgUp = 0 Then REA_Run_PressureAvgUp = NaN
        REA_Run_PressureAvgDown = REA_Run_PressureAvgDown / (REA_Run_TimeDown * SYS_OutputRate)   
        If REA_Run_PressureAvgDown = 0 Then REA_Run_PressureAvgDown = NaN 
        REA_Run_TempAvgUp = REA_Run_TempAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_TempAvgUp = 0 Then REA_Run_TempAvgUp = NaN
        REA_Run_TempAvgDown = REA_Run_TempAvgDown / (REA_Run_TimeDown * SYS_OutputRate)   
        If REA_Run_TempAvgDown = 0 Then REA_Run_TempAvgDown = NaN 
        REA_Run_HorWindVelAvgUp = REA_Run_HorWindVelAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_HorWindVelAvgUp = 0 Then REA_Run_HorWindVelAvgUp = NaN
        REA_Run_HorWindVelAvgDown = REA_Run_HorWindVelAvgDown / (REA_Run_TimeDown * SYS_OutputRate)
        If REA_Run_HorWindVelAvgDown = 0 Then REA_Run_HorWindVelAvgDown = NaN
        REA_Run_UxWindAvgUp = REA_Run_UxWindAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_UxWindAvgUp = 0 Then REA_Run_UxWindAvgUp = NaN
        REA_Run_UxWindAvgDown = REA_Run_UxWindAvgDown / (REA_Run_TimeDown * SYS_OutputRate)
        If REA_Run_UxWindAvgDown = 0 Then REA_Run_UxWindAvgDown = NaN
        REA_Run_UyWindAvgUp = REA_Run_UyWindAvgUp / (REA_Run_TimeUp * SYS_OutputRate)
        If REA_Run_UyWindAvgUp = 0 Then REA_Run_UyWindAvgUp = NaN
        REA_Run_UyWindAvgDown = REA_Run_UyWindAvgDown / (REA_Run_TimeDown * SYS_OutputRate)
        If REA_Run_UyWindAvgDown = 0 Then REA_Run_UyWindAvgDown = NaN
        REA_Run_HorWindDirAvgUp = (360.0 + 90.0 + ATN2((-1)*REA_Run_UxWindAvgUp,(-1)*REA_Run_UyWindAvgUp) + SYS_IRGASON_Azimuth) MOD 360
        REA_Run_HorWindDirAvgDown = (360.0 + 90.0 + ATN2((-1)*REA_Run_UxWindAvgDown,(-1)*REA_Run_UyWindAvgDown) + SYS_IRGASON_Azimuth) MOD 360
        
        ' Run time averaged conditions
        REA_Run_CO2AvgAll = REA_Run_CO2AvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_CO2DryAvgAll = REA_Run_CO2DryAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_H2OAvgAll = REA_Run_H2OAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_PressureAvgAll = REA_Run_PressureAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_TempAvgAll = REA_Run_TempAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_HorWindVelAvgAll = REA_Run_HorWindVelAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_UxWindAvgAll = REA_Run_UxWindAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_UyWindAvgAll = REA_Run_UyWindAvgAll / (REA_Run_TimeAll * SYS_OutputRate)
        REA_Run_HorWindDirAvgAll = (360.0 + 90.0 + ATN2((-1)*REA_Run_UxWindAvgAll,(-1)*REA_Run_UyWindAvgAll) + SYS_IRGASON_Azimuth) MOD 360
       
        SYS_StoreRun = 1 ' Save run statistics to table
        REA_Run_EndCounter = 1 ' start counter for flushing lines
        
      Else
        
        SYS_StoreRun = 0  
        
        If REA_Run_EndCounter = 1 Then
           ' Open "both" valves at end of run to flush
           SYS_CD16_Output(1) = 1
           SYS_CD16_Output(2) = 1
           SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
           REA_CurrentReservoir = 3
        EndIf

        If REA_Run_EndCounter > 0 Then REA_Run_EndCounter = REA_Run_EndCounter+1 ' increment counter

        If REA_Run_EndCounter = (SYS_REA_OpenValvesAtEnd * SYS_OutputRate) Then 
           ' Close "both" valves after SYS_REA_OpenValvesAtEnd seconds flushing
           SYS_CD16_Output(1) = 0
           SYS_CD16_Output(2) = 0
           SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
           PortSet(U1,0) ' Communicate with sampler that up reservoir is off
           PortSet(U2,0) ' Communicate with sampler that down reservoir is off
           REA_CurrentReservoir = 0
           REA_PreviousReservoir = 0
           REA_Run_EndCounter = 0 ' Stop counter
         EndIf
         
      EndIf
              
      ' Twice per day at 01:00:00 and 13:00:00 open both valves for one second for maintenance
      ' Maintenance to ensure they are not corroding / clogging - but only do so if there is no run active

      If (IfTime(3600,43200,Sec)) Then 
          REA_CurrentReservoir = 4 ' 4 means that both are open at the same time for scheduled maintenance
          REA_Valve_Maintenance = 1
          SYS_CD16_Output(1) = 1
          SYS_CD16_Output(2) = 1
          SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
          REA_Flag = 9
      EndIf        
 
      If (IfTime(3601,43200,Sec)) Then 
          REA_CurrentReservoir = 0 ' both are closed at end of scheduled maintenance
          REA_Valve_Maintenance = 0
          SYS_CD16_Output(1) = 0
          SYS_CD16_Output(2) = 0
          SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
      EndIf  
      
      If REA_Run_EndCounter = 0 Then
       If REA_Valve_Maintenance = 0 Then REA_Flag = -1 
      EndIf
      
    EndIf
    
    ' Determine Standard Deviation of moving block for vertical wind
    AvgRun (AGG_IRGASON_Uz_RunAvg,1,RAW_IRGASON_Uz,SYS_MovingBlockDuration*SYS_OutputRate)
    RAW_IRGASON_Uz_SqDeparture = (RAW_IRGASON_Uz - AGG_IRGASON_Uz_RunAvg)^2 ' SqDeparture = (w - w_overbar)^2 
    AvgRun (AGG_IRGASON_Uz_RunSqDeparture,1,RAW_IRGASON_Uz_SqDeparture,SYS_MovingBlockDuration*SYS_OutputRate)
    AGG_IRGASON_Uz_Stddev = (AGG_IRGASON_Uz_RunSqDeparture)^0.5
	
    ' Determine Standard Deviation of moving block for dry mole fraction of CO2 (ppm)
    AvgRun (AGG_IRGASON_CO2Dry_RunAvg,1,RAW_IRGASON_CO2Dry,SYS_MovingBlockDuration*SYS_OutputRate)
    RAW_IRGASON_CO2Dry_SqDeparture = (RAW_IRGASON_CO2Dry - AGG_IRGASON_CO2Dry_RunAvg)^2 ' SqDeparture = (c - c_overbar)^2 
    AvgRun (AGG_IRGASON_CO2Dry_RunSqDeparture,1,RAW_IRGASON_CO2Dry_SqDeparture,SYS_MovingBlockDuration*SYS_OutputRate)
    AGG_IRGASON_CO2Dry_Stddev = (AGG_IRGASON_CO2Dry_RunSqDeparture)^0.5

    If (REA_Sampler_Active = 0) Then
      AGG_IRGASON_Frozen_Uz_RunAvg = AGG_IRGASON_Uz_RunAvg ' update fixed mean vertical wind value as long as there is no new run
      AGG_IRGASON_Frozen_Uz_Stddev = AGG_IRGASON_Uz_Stddev ' update fixed mean vertical wind value as long as there is no new run
      AGG_IRGASON_Frozen_CO2Dry_RunAvg = AGG_IRGASON_CO2Dry_RunAvg ' update fixed mean vertical wind value as long as there is no new run
      AGG_IRGASON_Frozen_CO2Dry_Stddev = AGG_IRGASON_CO2Dry_Stddev ' update fixed mean vertical wind value as long as there is no new run
    EndIf     
    
    ' If Relaxed Eddy Accumulation is active
    If (REA_Sampler_Active = 1) Then 
    
      If REA_FreezeStatistics=1 ' If Frozen option is chosen, then overwrite dynamic values with frozen ones
         AGG_IRGASON_Uz_RunAvg = AGG_IRGASON_Frozen_Uz_RunAvg
         AGG_IRGASON_Uz_Stddev = AGG_IRGASON_Frozen_Uz_Stddev
         AGG_IRGASON_CO2Dry_RunAvg = AGG_IRGASON_Frozen_CO2Dry_RunAvg
         AGG_IRGASON_CO2Dry_Stddev = AGG_IRGASON_Frozen_CO2Dry_Stddev
      EndIf
      
      If REA_Sampler_PreviousActive = 0 Then ' First time new run is started
         PortSet(U3,1) ' Communicate with sampler that new run is to start
         REA_Run_Start = Public.Timestamp(5,1) ' Record time of starting
         REA_Run_TimeUp = 0 ' Reset run statistics (how long up reservoir is open)
         REA_Run_TimeDown = 0 ' Reset run statistics (how long down reservoir is open)
         REA_Run_TimeAll = 0
         REA_Run_SwitchesUp = 0 ' Reset number of switches for up
         REA_Run_SwitchesDown = 0 ' Reset number of switches for down
         REA_Run_CO2AvgUp = 0 ' Reset run average concentration of CO2 for up
         REA_Run_CO2AvgDown = 0 ' Reset run average concentration of CO2 for down
         REA_Run_CO2AvgDown = 0
         REA_Run_CO2DryAvgUp = 0 ' Reset run average concentration of CO2 for up
         REA_Run_CO2DryAvgDown = 0 ' Reset run average concentration of CO2 for down
         REA_Run_CO2DryAvgAll = 0
         REA_Run_H2OAvgUp = 0 ' Reset run average concentration of H2O for up
         REA_Run_H2OAvgDown = 0 ' Reset run average concentration of H2O for down
         REA_Run_H2OAvgAll = 0
         REA_Run_PressureAvgUp = 0 ' Reset run average concentration of Pressure for up
         REA_Run_PressureAvgDown = 0 ' Reset run average concentration of Pressure for down
         REA_Run_PressureAvgAll = 0
         REA_Run_TempAvgUp = 0 ' Reset run average concentration of Temp for up
         REA_Run_TempAvgDown = 0 ' Reset run average concentration of Temp for down
         REA_Run_TempAvgAll = 0
         REA_Run_HorWindVelAvgUp = 0
         REA_Run_HorWindVelAvgDown = 0
         REA_Run_HorWindVelAvgAll = 0
         REA_Run_UxWindAvgUp = 0
         REA_Run_UxWindAvgDown = 0
         REA_Run_UxWindAvgAll = 0
         REA_Run_UyWindAvgUp = 0
         REA_Run_UyWindAvgDown = 0
         REA_Run_UyWindAvgAll = 0
         REA_Run_HorWindDirAvgUp = 0
         REA_Run_HorWindDirAvgDown = 0
         REA_Run_HorWindDirAvgAll = 0
      EndIf   
      
      If REA_Manual_OpenValves = 0 Then ' Regular REA operation - either hyperbolic or deadband options 
      REA_CurrentReservoir = 0 ' default
      
' ****************************** 
' Hyperbolic REA with holesize
' ****************************** 

       If REA_Hyperbolic = 1 Then   
           REA_HyperbolicDistance = (ABS(RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg)/AGG_IRGASON_Uz_Stddev) * (ABS(RAW_IRGASON_CO2Dry-AGG_IRGASON_CO2Dry_RunAvg)/AGG_IRGASON_CO2Dry_Stddev)
           If ( REA_HyperbolicDistance > REA_DeadBandWidth ) AND ((RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg) > 0) Then REA_CurrentReservoir = 1 ' in updraft reservoir, collection
           If ( REA_HyperbolicDistance > REA_DeadBandWidth ) AND ((RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg) < 0) Then REA_CurrentReservoir = 2 ' in downdraft reservoir, collection
           If ( REA_HyperbolicDistance <= REA_DeadBandWidth ) Then REA_CurrentReservoir = 0 ' in Deadband, no collection
       EndIf        
       
' ******************************        
' Regular REA with deadband
' ****************************** 

       If REA_Hyperbolic = 0 Then   
           If ((RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg) > (REA_DeadBandWidth * AGG_IRGASON_Uz_Stddev)) Then REA_CurrentReservoir = 1 ' in updraft reservoir, collection
           If ((RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg) < (-1)*(REA_DeadBandWidth * AGG_IRGASON_Uz_Stddev)) Then REA_CurrentReservoir = 2 ' in downdraft reservoir, collection
           If (ABS(RAW_IRGASON_Uz-AGG_IRGASON_Uz_RunAvg) <= (REA_DeadBandWidth * AGG_IRGASON_Uz_Stddev)) Then REA_CurrentReservoir = 0 ' in Deadband, no collection
       EndIf
 
' ******************************        
' Execute based on chosen reservoir
' ****************************** 
                
           If REA_CurrentReservoir = 1 Then ' Upward reservoir
            REA_Run_TimeUp = REA_Run_TimeUp + 1/SYS_OutputRate
            REA_Run_CO2AvgUp = REA_Run_CO2AvgUp + RAW_IRGASON_CO2_FastResp ' sum CO2 concentrations up to calculate conditional average at end of REA run
            REA_Run_CO2DryAvgUp = REA_Run_CO2DryAvgUp + RAW_IRGASON_CO2Dry
            REA_Run_H2OAvgUp = REA_Run_H2OAvgUp + RAW_IRGASON_H2O ' sum H2O concentrations up to calculate conditional average at end of REA run
            REA_Run_PressureAvgUp = REA_Run_PressureAvgUp + RAW_IRGASON_CellPrs ' sum Pressure during up to calculate conditional average at end of REA run
            REA_Run_TempAvgUp = REA_Run_TempAvgUp + RAW_IRGASON_CellT ' sum Temperature during up to calculate conditional average at end of REA run
            REA_Run_HorWindVelAvgUp = REA_Run_HorWindVelAvgUp + RAW_IRGASON_HorWindVel_ms ' sum wind velocity during up to calculate conditional average at end of REA run
            REA_Run_UxWindAvgUp = REA_Run_UxWindAvgUp + RAW_IRGASON_Ux ' sum wind component ux during up to calculate conditional average at end of REA run
            REA_Run_UyWindAvgUp = REA_Run_UyWindAvgUp + RAW_IRGASON_Uy ' sum wind component uy during up to calculate conditional average at end of REA run
            
            If REA_PreviousReservoir <> REA_CurrentReservoir Then
              ' Open "up" valve
              REA_Run_SwitchesUp = REA_Run_SwitchesUp+1
              SYS_CD16_Output(1) = 1
              SYS_CD16_Output(2) = 0
              SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
              PortSet(U1,1) ' Communicate with sampler that up reservoir is on
              PortSet(U2,0) ' Communicate with sampler that down reservoir is off
            EndIf   
          EndIf
          
          If REA_CurrentReservoir = 2 Then  ' Downward reservoir
            REA_Run_TimeDown = REA_Run_TimeDown + 1/SYS_OutputRate
            REA_Run_CO2AvgDown = REA_Run_CO2AvgDown + RAW_IRGASON_CO2_FastResp ' sum CO2 concentrations down to calculate conditional average at end of REA run
            REA_Run_CO2DryAvgDown = REA_Run_CO2DryAvgDown + RAW_IRGASON_CO2Dry         
            REA_Run_H2OAvgDown = REA_Run_H2OAvgDown + RAW_IRGASON_H2O ' sum H2O concentrations down to calculate conditional average at end of REA run
            REA_Run_PressureAvgDown = REA_Run_PressureAvgDown + RAW_IRGASON_CellPrs ' sum Pressure during down to calculate conditional average at end of REA run
            REA_Run_TempAvgDown = REA_Run_TempAvgDown + RAW_IRGASON_CellT ' sum Temperature during down to calculate conditional average at end of REA run
            REA_Run_HorWindVelAvgDown = REA_Run_HorWindVelAvgDown + RAW_IRGASON_HorWindVel_ms ' sum wind velocity during up to calculate conditional average at end of REA run
            REA_Run_UxWindAvgDown = REA_Run_UxWindAvgDown + RAW_IRGASON_Ux ' sum wind component ux during up to calculate conditional average at end of REA run
            REA_Run_UyWindAvgDown = REA_Run_UyWindAvgDown + RAW_IRGASON_Uy ' sum wind component uy during up to calculate conditional average at end of REA run
            
            If REA_PreviousReservoir <> REA_CurrentReservoir Then
              ' Open "down" valve
              REA_Run_SwitchesDown = REA_Run_SwitchesDown+1
              SYS_CD16_Output(1) = 0
              SYS_CD16_Output(2) = 1
              SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
              PortSet(U1,0) ' Communicate with sampler that up reservoir is off
              PortSet(U2,1) ' Communicate with sampler that down reservoir is on
            EndIf   
          EndIf
          
          If REA_CurrentReservoir = 0 Then  ' No reservoir (in deadband or hole)
            If REA_PreviousReservoir <> REA_CurrentReservoir Then
              ' Close "both" valves
              SYS_CD16_Output(1) = 0
              SYS_CD16_Output(2) = 0
              SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
              PortSet(U1,0) ' Communicate with sampler that up reservoir is off
              PortSet(U2,0) ' Communicate with sampler that down reservoir is off
            EndIf   
          EndIf

        
      Else ' Manually open valves and override REA switching by vertical wind
        REA_CurrentReservoir = 3 ' 3 means that both are open at the same time
        REA_Run_TimeUp = REA_Run_TimeUp + 1/SYS_OutputRate
        REA_Run_TimeDown = REA_Run_TimeDown + 1/SYS_OutputRate
        
        REA_Run_CO2AvgUp = REA_Run_CO2AvgUp + RAW_IRGASON_CO2_FastResp ' sum CO2 concentrations up to calculate conditional average at end of REA run
        REA_Run_CO2DryAvgUp = REA_Run_CO2DryAvgUp + RAW_IRGASON_CO2Dry
        REA_Run_H2OAvgUp = REA_Run_H2OAvgUp + RAW_IRGASON_H2O ' sum H2O concentrations up to calculate conditional average at end of REA run
        REA_Run_PressureAvgUp = REA_Run_PressureAvgUp + RAW_IRGASON_CellPrs ' sum Pressure up to calculate conditional average at end of REA run
        REA_Run_TempAvgUp = REA_Run_TempAvgUp + RAW_IRGASON_CellT ' sum Temp up to calculate conditional average at end of REA run
        REA_Run_HorWindVelAvgUp = REA_Run_HorWindVelAvgUp + RAW_IRGASON_HorWindVel_ms ' sum wind velocity during up to calculate conditional average at end of REA run
        REA_Run_UxWindAvgUp = REA_Run_UxWindAvgUp + RAW_IRGASON_Ux ' sum wind component ux during up to calculate conditional average at end of REA run
        REA_Run_UyWindAvgUp = REA_Run_UyWindAvgUp + RAW_IRGASON_Uy ' sum wind component uy during up to calculate conditional average at end of REA run
        
        REA_Run_CO2AvgDown = REA_Run_CO2AvgDown + RAW_IRGASON_CO2_FastResp ' sum CO2 concentrations down to calculate conditional average at end of REA run
        REA_Run_CO2DryAvgDown = REA_Run_CO2DryAvgDown+ RAW_IRGASON_CO2Dry
        REA_Run_H2OAvgDown = REA_Run_H2OAvgDown + RAW_IRGASON_H2O ' sum H2O concentrations down to calculate conditional average at end of REA run
        REA_Run_PressureAvgDown = REA_Run_PressureAvgDown + RAW_IRGASON_CellPrs ' sum Pressure down to calculate conditional average at end of REA run
        REA_Run_TempAvgDown = REA_Run_TempAvgDown + RAW_IRGASON_CellT ' sum Temp down to calculate conditional average at end of REA run
        REA_Run_HorWindVelAvgDown = REA_Run_HorWindVelAvgDown + RAW_IRGASON_HorWindVel_ms ' sum wind velocity during up to calculate conditional average at end of REA run
        REA_Run_UxWindAvgDown = REA_Run_UxWindAvgDown + RAW_IRGASON_Ux ' sum wind component ux during up to calculate conditional average at end of REA run
        REA_Run_UyWindAvgDown = REA_Run_UyWindAvgDown + RAW_IRGASON_Uy ' sum wind component uy during up to calculate conditional average at end of REA run
          
        If REA_PreviousReservoir <> REA_CurrentReservoir Then
          REA_Run_SwitchesUp = REA_Run_SwitchesUp+1
          REA_Run_SwitchesDown = REA_Run_SwitchesDown+1
          SYS_CD16_Output(1) = 1
          SYS_CD16_Output(2) = 1
          SDMCD16AC(SYS_CD16_Output,1,SYS_CD8S_SDMAddress)
          PortSet(U1,1) ' Communicate with sampler that up reservoir is manually on 
          PortSet(U2,1) ' Communicate with sampler that down reservoir is manually on 
        EndIf
      EndIf 
      
      REA_Flag = REA_PreviousReservoir*10 + REA_CurrentReservoir + REA_Sampler_Active*100
      REA_PreviousReservoir = REA_CurrentReservoir
      
      'Run-averaged statistics
      
      REA_Run_TimeAll = REA_Run_TimeAll + 1/SYS_OutputRate
      REA_Run_CO2AvgAll = REA_Run_CO2AvgAll + RAW_IRGASON_CO2_FastResp ' sum CO2 during run to calculate average at end of REA run
      REA_Run_CO2DryAvgAll = REA_Run_CO2DryAvgAll + RAW_IRGASON_CO2Dry ' sum CO2 dry during run to calculate average at end of REA run
      REA_Run_H2OAvgAll = REA_Run_H2OAvgAll + RAW_IRGASON_H2O ' sum H2O during run to calculate average at end of REA run
      REA_Run_PressureAvgAll = REA_Run_PressureAvgAll + RAW_IRGASON_CellPrs ' sum Pressure during run to calculate average at end of REA run
      REA_Run_TempAvgAll = REA_Run_TempAvgAll + RAW_IRGASON_Ts ' sum Temp during run to calculate average at end of REA run
      REA_Run_HorWindVelAvgAll = REA_Run_HorWindVelAvgAll + RAW_IRGASON_HorWindVel_ms ' sum wind velocity during run to calculate average at end of REA run
      REA_Run_UxWindAvgAll = REA_Run_UxWindAvgAll + RAW_IRGASON_Ux ' sum wind component ux during any time to calculate average at end of REA run
      REA_Run_UyWindAvgAll = REA_Run_UyWindAvgAll + RAW_IRGASON_Uy ' sum wind component ux during any time to calculate average at end of REA run
      
    EndIf
    
    REA_Sampler_PreviousActive = REA_Sampler_Active  
   
    CallTable RAW_20Hz
    CallTable AGG_1min
    CallTable REA_RunSummary
    
    'If SYS_20HzFileWritten = -1 AND SYS_20HzFileReadytoSend = 0 Then SYS_20HzFileReadytoSend = SYS_20HzFileWritten  
    
    If SYS_StoreRun = 1 Then SYS_UploadRun = 1
    
    'Write a file mark every 30 min to the tables
    If (IfTime(0,30,Min)) Then 
     FileMark(RAW_20Hz)
     FileMark(AGG_1min)
     SYS_DateStamp = Left(Public.Timestamp(5,1),10)
    EndIf 

	NextScan
	
'----------------------------------------------------------------------
' SLOW SEQUENCE #1
' Get system parameters every minute
'----------------------------------------------------------------------

	SlowSequence
  Scan (10,Sec,0,0)
    'If (IfTime(20,1440,Min)) Then ' Check time through NTP at 00:20 every day
      'SYS_TimeOffset = NetworkTimeProtocol(SYS_NTP_Server_IP,SYS_Offset_from_UTC,50) ' Set Time
    'EndIf
    Battery(SYS_BattVolt)
    PanelTemp (SYS_PanelTemp,15000)
    
    ' ------------------------------------------------------------
    ' Optionally sample ClimaVue50 every 10 seconds
    ' ------------------------------------------------------------

    #If (SYS_ClimaVue50_Enable) Then
   
    ' Get SDI-12 data from ClimaVue50
    SDI12Recorder(RAW_CV50_Data(),SYS_CV50_SDI12Port,"0","R7!",1,0,-1)   

    ' Quality control and secondary entries for pressure
    MET_CV50_PressureActual_hPa = RAW_CV50_PressureActual_kPa * 10 ' conversion kPa to hPa
    If ( MET_CV50_PressureActual_hPa > 1100 ) Then MET_CV50_PressureActual_hPa = NaN
    If ( MET_CV50_PressureActual_hPa < 500 ) Then MET_CV50_PressureActual_hPa = NaN
    
    ' Quality control and secondary entries for temperature and humidity
    MET_CV50_AirTemperature_degC = RAW_CV50_AirTemperature_degC				
    MET_CV50_RelHumidity_percent = RAW_CV50_RelHumidity_fractional * 100 'Convert fractional relative humidity into percent relative humidity
    MET_CV50_VapourPressure_hPa = RAW_CV50_VapourPressure_kPa * 10 ' Convert from kPa to hPa
    
		If ( MET_CV50_AirTemperature_degC > 50 ) Then MET_CV50_AirTemperature_degC = NaN
    If ( MET_CV50_AirTemperature_degC < -40 ) Then MET_CV50_AirTemperature_degC = NaN
    If ( MET_CV50_RelHumidity_percent > 110 ) Then MET_CV50_RelHumidity_percent = NaN
    If ( MET_CV50_RelHumidity_percent > 100 ) Then MET_CV50_RelHumidity_percent = 100
    If ( MET_CV50_RelHumidity_percent < 0 ) Then MET_CV50_RelHumidity_percent = 0
    
    SatVP(MET_SaturVapPrsTd_kPa,MET_CV50_AirTemperature_degC) 'Lowe, Paul R.: 1977, "An approximating polynomial for computation of saturation vapor pressure," Journal of Applied Meteorology, 16, 100-103
    MET_SaturVapPrsTd_hPa = MET_SaturVapPrsTd_kPa * 10 'kPa -> hPa
    DewPoint(MET_CV50_DewPoint_degC,MET_CV50_AirTemperature_degC,MET_CV50_RelHumidity_percent)
    MET_CV50_VapPressDeficit_hPa = MET_SaturVapPrsTd_hPa - MET_CV50_VapourPressure_hPa 
    MET_CV50_MixingRatio_gKg = 1000.0 * (SYS_GasConstantAir * MET_CV50_VapourPressure_hPa) / (SYS_GasConstantWater * (MET_CV50_PressureActual_hPa - MET_CV50_VapourPressure_hPa))

    If ( MET_CV50_VapourPressure_hPa > 70 ) Then MET_CV50_VapourPressure_hPa = NaN
    If ( MET_CV50_VapourPressure_hPa < 0 ) Then MET_CV50_VapourPressure_hPa = NaN
    If ( MET_CV50_VapPressDeficit_hPa > 50 ) Then MET_CV50_VapPressDeficit_hPa = NaN
    If ( MET_CV50_VapPressDeficit_hPa < 0 ) Then MET_CV50_VapPressDeficit_hPa = 0
    If ( MET_CV50_DewPoint_degC < -40 ) Then MET_CV50_DewPoint_degC = NaN
    If ( MET_CV50_DewPoint_degC > 50 ) Then MET_CV50_DewPoint_degC = NaN
    If ( MET_CV50_MixingRatio_gKg < 0 ) Then MET_CV50_MixingRatio_gKg = NaN
    If ( MET_CV50_MixingRatio_gKg > 40 ) Then MET_CV50_MixingRatio_gKg = NaN 
    
    If ( MET_CV50_AirTemperature_degC = NaN) Then
         MET_SaturVapPrsTd_kPa = NaN
         MET_SaturVapPrsTd_hPa = NaN
         MET_CV50_VapourPressure_hPa = NaN
         MET_CV50_VapPressDeficit_hPa = NaN
         MET_CV50_DewPoint_degC = NaN
         MET_CV50_MixingRatio_gKg = NaN
    EndIf 
        
    If ( MET_CV50_RelHumidity_percent = NaN) Then
         MET_CV50_VapourPressure_hPa = NaN
         MET_CV50_VapPressDeficit_hPa = NaN
         MET_CV50_DewPoint_degC = NaN
         MET_CV50_MixingRatio_gKg = NaN
    EndIf 
    
    ' Quality control and secondary entries for solar irradiance

    MET_CV50_GHI_Wm2 = RAW_CV50_GHI_Wm2
    MET_CV50_WindDirection_deg = (RAW_CV50_WindDirection_deg + SYS_CV50_Azimuth) MOD 360 ' correct for ClimaVUE offset 

		If ( MET_CV50_GHI_Wm2 > 1750 ) Then MET_CV50_GHI_Wm2 = NaN ' more than 1750 W/m2 is outside specs for system
    If ( MET_CV50_GHI_Wm2 < -20 ) Then MET_CV50_GHI_Wm2 = NaN
    If ( MET_CV50_GHI_Wm2 < 0 ) Then MET_CV50_GHI_Wm2 = 0
    
    ' Quality control and secondary entries for precipitation and lightning

    MET_CV50_Precipitation_mm = RAW_CV50_Precipitation_mm
		If ( MET_CV50_Precipitation_mm > 1.2 ) Then MET_CV50_Precipitation_mm = NaN ' more than 1.2 mm per 10 seconds is outside specs for system
    If ( MET_CV50_Precipitation_mm < 0 ) Then MET_CV50_Precipitation_mm = NaN
    MET_CV50_Precipitation_mm = MET_CV50_Precipitation_mm 
    
    MET_CV50_LtngStrikes_cnt = RAW_CV50_LtngStrikes_cnt
    MET_CV50_LtngDist_km = MET_CV50_LtngDist_km
    If ( MET_CV50_LtngStrikes_cnt < 0 ) Then MET_CV50_LtngStrikes_cnt = NaN
    If ( MET_CV50_LtngDist_km < 0 ) Then MET_CV50_LtngDist_km = NaN
    MET_CV50_LtngStrikes_cnt = MET_CV50_LtngStrikes_cnt 
     
    ' Quality control and secondary entries for wind

    MET_CV50_Wind_ms = RAW_CV50_Wind_ms
    MET_CV50_WindGustMax_ms = RAW_CV50_WindGustMax_ms
    
      'High winds with rain can temporarily interfere with sonic wind measurements causing the sensor to output -9999 or -9990. The following instructions set invalid wind measurements
			'to the previous valid wind measurements. This will 'flat-line' the measurements until the sensor is able to make good readings again. The Invalid_Wind variable will be set to 1 when
			'a wind measurement is invalid. For troubleshooting purposes, it is highly recommended that you totalize the Invalid_Wind variable in any output tables you define that include
			'wind speed and/or direction data from the ClimaVUE50.
			
			If RAW_CV50_Wind_ms < 0 Then
				MET_CV50_Wind_ms=MET_CV50_Wind_ms_prev
				MET_CV50_WindDirection_deg=MET_CV50_WindDirection_deg_prev
				MET_CV50_WindGustMax_ms=MET_CV50_WindGustMax_ms_prev
				RAW_CV50_Invalid_Wind=1
			Else
				MET_CV50_Wind_ms_prev=RAW_CV50_Wind_ms
				MET_CV50_WindDirection_deg_prev=MET_CV50_WindDirection_deg
				MET_CV50_WindGustMax_ms_prev=MET_CV50_WindGustMax_ms
				RAW_CV50_Invalid_Wind=0
			EndIf

		If ( MET_CV50_Wind_ms > 30 ) Then MET_CV50_Wind_ms = NaN ' more than 30 m/s is outside specifications of ClimaVue
    If ( MET_CV50_Wind_ms < 0 ) Then MET_CV50_Wind_ms = NaN
		If ( MET_CV50_WindGustMax_ms > 30 ) Then MET_CV50_WindGustMax_ms = NaN ' more than 30 m/s is outside specifications of ClimaVue
    If ( MET_CV50_WindGustMax_ms < 0 ) Then MET_CV50_WindGustMax_ms = NaN

    If ( MET_CV50_WindDirection_deg > 360 ) Then MET_CV50_WindDirection_deg = NaN
    If ( MET_CV50_WindDirection_deg < 0 ) Then MET_CV50_WindDirection_deg = NaN
    
 #EndIf  
 NextScan
  
'----------------------------------------------------------------------
' SLOW SEQUENCE #2
' Submit latest RAW_20Hz and AGG_1min files to server every 30 minutes
'----------------------------------------------------------------------
 
  SlowSequence
  Scan (30,Min,0,0)
   
    'Create time stamps for file transmission
     SYS_DateStamp = Left(Public.Timestamp(5,1),10)
     SYS_TimeStamp = Mid(Public.Timestamp(5,1),12,2) & Mid(Public.Timestamp(5,1),15,2) 
     
    SYS_LastFileNameRaw20Hz_tmp = SYS_LastFileNameRaw20Hz
  
    'INRAE : add a delay to make sure the dat file is ready prior to sending it out
    Delay(0,10,min)
     
    'Zip the files prior to sending them out to gain time and sime card capacity
    'additionnally save space on SD car
    'and finally put right name including hours
    SYS_ResultGzip(1) = Gzip(SYS_LastFileNameRaw20Hz,"CRD:"+Status.SerialNumber+"_RAW_20Hz_"& SYS_DateStamp & "-" & SYS_TimeStamp)'Creates file on SD card
      
    Delay(0,4,min)

    'Send 30 min files of raw data
     'SYS_FTPresult(1)=FTPClient (SYS_FTP_ServerIP,SYS_FTP_User,SYS_FTP_Password,"RAW_20Hz",
     '"/data/RAW/by-source/ICOS_Cities/"+Status.SerialNumber+"/RAW_20Hz/"+Status.SerialNumber+"_RAW_20Hz_" & SYS_DateStamp & "-" & SYS_TimeStamp & ".csv",2,0,30,Min,-1008)
     SYS_FTPresult(1)=FTPClient (SYS_FTP_ServerIP,SYS_FTP_User,SYS_FTP_Password,"CRD:"+Status.SerialNumber+"_RAW_20Hz_"& SYS_DateStamp & "-" & SYS_TimeStamp & ".gz","/data/RAW/by-source/ICOS_Cities/"+Status.SerialNumber+"/RAW_20Hz/"+Status.SerialNumber+"_RAW_20Hz_" & SYS_DateStamp & "-" & SYS_TimeStamp & ".gz",2)
     SYS_FTPresult(2)=FTPClient (SYS_FTP_ServerIP,SYS_FTP_User,SYS_FTP_Password,"AGG_1min","/data/RAW/by-source/ICOS_Cities/"+Status.SerialNumber+"/AGG_1min/"+Status.SerialNumber+"_AGG_1min_" & SYS_DateStamp & "-" & SYS_TimeStamp & ".csv",2,0,30,Min,-1008)

    
  NextScan
  
'----------------------------------------------------------------------
' SLOW SEQUENCE #3
' Submit run average file to FTP if a run has ended in last 5 seconds
'----------------------------------------------------------------------
  
  SlowSequence
  Scan (5,Sec,0,0)
    
    If SYS_UploadRun = 1 Then

    'Create time stamps for file transmission
     SYS_DateStamp = Left(Public.Timestamp(5,1),10)
     SYS_TimeStamp = Mid(Public.Timestamp(5,1),12,2) & Mid(Public.Timestamp(5,1),15,2) 
     SYS_FTPresult(3)=FTPClient (SYS_FTP_ServerIP,SYS_FTP_User,SYS_FTP_Password,"REA_RunSummary","/data/RAW/by-source/ICOS_Cities/"+Status.SerialNumber+"/REA_RunSummary/"+Status.SerialNumber+"_REA_RunSummary_" & SYS_DateStamp & "-" & SYS_TimeStamp & ".csv",2,1,-1,Min,-1008)
     SYS_UploadRun = 0   ' Reset upload
   EndIf
  NextScan
  
EndProg
           
